<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.3.11">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_C1_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_H2_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_D10_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_A6_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_H6_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_D1_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_A5_CID_20ev.mzML</file>
            <file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/all_converted/CID/20/20230912_nexus_plate_1_Q1_pos_H4_CID_20ev.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">100</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_msn_tree.MsnTreeFeatureDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="EIC scans" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">msn trees</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_localcsvsearch.LocalCSVDatabaseSearchModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Database file">
            <current_file>/Volumes/biol_imsb_sauer_1/users/Adriano/01_projects/02_library/02_raw_data/inhouse/01_zeno/nexus_coordinates_minimal_named.tsv</current_file>
        </parameter>
        <parameter name="Field separator">\t</parameter>
        <parameter name="Columns">
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            <importtype column="smiles" datatype="io.github.mzmine.datamodel.features.types.annotations.SmilesStructureType" selected="true"/>
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            <importtype column="name" datatype="io.github.mzmine.datamodel.features.types.annotations.CompoundNameType" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">9999999.0</parameter>
        <parameter name="Mobility time tolerance">0.01</parameter>
        <parameter name="CCS tolerance (%)">0.05</parameter>
        <parameter name="Use isotope matcher" selected="true">
            <parameter name="Isotope m/z tolerance">
                <absolutetolerance>0.001</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Minimum isotope intensity (%)">0.05</parameter>
            <parameter name="Minimum isotope score">0.0</parameter>
        </parameter>
        <parameter name="Use adducts" selected="true">
            <parameter name="Maximum charge">2</parameter>
            <parameter name="Maximum molecules/cluster">2</parameter>
            <parameter name="Adducts">
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                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="-5.4858E-4" mol_formula="" name="e" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="18.033823" mol_formula="NH4" name="NH4" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="1" mass_difference="1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="38.963158" mol_formula="K" name="K" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                    <subpart charge="1" mass_difference="22.989218" mol_formula="Na" name="Na" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="39.96149382" mol_formula="Ca" name="Ca" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
                <adduct_type selected="true">
                    <subpart charge="2" mass_difference="55.93384" mol_formula="Fe" name="Fe" type="ADDUCT"/>
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                </adduct_type>
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                <adduct_type selected="true">
                    <subpart charge="-1" mass_difference="-1.007276" mol_formula="H" name="H" type="ADDUCT"/>
                    <subpart charge="2" mass_difference="47.96953482" mol_formula="Mg" name="Mg" type="ADDUCT"/>
                </adduct_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
                <modification_type selected="true">
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                    <subpart charge="0" mass_difference="-18.010565" mol_formula="H2O" name="H2O" type="NEUTRAL_LOSS"/>
                </modification_type>
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                <modification_type selected="true">
                    <subpart charge="0" mass_difference="32.026215" mol_formula="CH3OH" name="MeOH" type="CLUSTER"/>
                </modification_type>
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            </parameter>
        </parameter>
        <parameter name="Filter filename header" selected="true">position</parameter>
        <parameter name="Append comment fields"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum aligned features (samples)" selected="false">
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        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false">
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        </parameter>
        <parameter name="features duration range" selected="true">
            <min>0.01</min>
            <max>999.0</max>
        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">true</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">false</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_type.IonTypeAnalysisModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="MS data selection">Processed</parameter>
        <parameter name="ms1 tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="ms2 tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/adrutz/Git/ion-type-analysis/data/di_tof_100_20ev_pos/{}.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
