<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.3.19">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_G3_CID_20ev.mzML</file>
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_G4_CID_20ev.mzML</file>
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_H1_CID_20ev.mzML</file>
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_H2_CID_20ev.mzML</file>
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_H3_CID_20ev.mzML</file>
            <file>/Users/adrutz/Git/ion-type-analysis/data/example/20230916_nexus_plate_1_P5_pos_H4_CID_20ev.mzML</file>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Factor of lowest signal">
            <module name="Factor of lowest signal">
                <parameter name="Noise factor">5.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_msn_tree.MsnTreeFeatureDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="EIC scans" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">msn trees</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.05</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">false</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_ion_type.IonTypeAnalysisModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="MS data selection">Processed</parameter>
        <parameter name="ms1 tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="msn tolerance">
            <absolutetolerance>0.015</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_csv.CSVExportModularModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/Users/adrutz/Git/ion-type-analysis/data/example/{}.csv</current_file>
        </parameter>
        <parameter name="Field separator">,</parameter>
        <parameter name="Identification separator">;</parameter>
        <parameter name="Remove empty columns">true</parameter>
        <parameter name="Filter rows">ALL</parameter>
    </batchstep>
</batch>
